acquisition:
  metadata:
    driver: voxel.metadata.metadata_class
    module: MetadataClass
    init:
      metadata_dictionary:
        instrument_type: exaspim
        subject_id: 123456
        experimenter_name: [adam glaser]
        immersion_medium: 0.05X SSC
        immersion_medium_refractive_index: 1.33
        x_anatomical_direction: Anterior_to_posterior
        y_anatomical_direction: Inferior_to_superior
        z_anatomical_direction: Left_to_right
      date_format: Year/Month/Day/Hour/Minute/Second
      name_specs:
        deliminator: _
        format: [instrument_type, subject_id]
  operations:
    vp-151mx:
      imaris:
        type: writer
        driver: voxel.writers.imaris
        module: ImarisWriter
        init:
          path: C:\local_test
        properties:
          compression: lz4shuffle
          data_type: uint16
      robocopy:
        type: transfer
        driver: voxel.transfers.robocopy
        module: FileTransfer
        init:
          external_path: C:\external_test
          local_path: C:\local_test
      rsync:
        type: transfer
        driver: voxel.transfers.rsync
        module: FileTransfer
        init:
          external_path: C:\external_test_1
          local_path: C:\local_test
      max_projection:
        type: process
        driver: voxel.processes.cpu.max_projection
        module: MaxProjection
        init:
          path: C:\local_test
        properties:
          data_type: uint16
          projection_count_px: 32
      background_collection:
        type: routine
        driver: voxel.routines.background_collection
        module: BackgroundCollection
        init:
          path: C:\local_test
        properties:
          data_type: uint16
          frame_count_px: 10
  tiles: []
