acquisition:
  metadata:
    subject_id: 123456
    experimenter_name: adam glaser
    immersion_medium: 0.05X SSC
    immersion_medium_refractive_index: 1.33
    x_anatomical_direction: Anterior_to_posterior
    y_anatomical_direction: Inferior_to_superior
    z_anatomical_direction: Left_to_right
#  storage:
#    - camera_name: vp-151mx
#      filename_prefix: tile
#      local_drive: C:\Users\svc_aind_imaging\Desktop
#      external_drive: C:\Users\svc_aind_imaging\Desktop\test
#    - camera_name: vnp-604mx
#      filename_prefix: tile
#      local_drive: C:\Users\svc_aind_imaging\Desktop
#      external_drive: C:\Users\svc_aind_imaging\Desktop\test
  operations:
    C15440-20UP:
      robocopy:
        type: transfer
        driver: voxel.transfers.robocopy
        module: FileTransfer
        init:
          external_directory: C:\Users\micah.woodard\Downloads\exaspim-test
          local_directory: C:\Users\micah.woodard\Downloads
      imaris:
        type: writer
        driver: voxel.writers.imaris
        module: Writer
        init:
          path: C:\Users\micah.woodard\Downloads
        settings:
          compression: lz4shuffle
          data_type: uint16
      max_projection:
        type: process
        driver: voxel.processes.cpu.max_projection
        module: MaxProjection
        init:
          path: ./local_test
        settings:
          data_type: uint16
          projection_count_px: 32

  tiles: []